PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ominoise_main
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Routines
  Routine _instructions
    TextComponent __instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        TODO: ominoise instructions

        TODO: press space bar to continue
    KeyboardComponent __continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine _see_word
  Routine RMshow_noise
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $condition
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine _bye
    TextComponent _bye_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Todo: Bye bye!
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    KeyboardComponent _bye_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine _instructions
  LoopInitiator _loop_noises loopType="TrialHandler"
    conditionsFile = csvs/noise_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'condition 1')]),
      OrderedDict([('condition', 'condition 2')]),
      OrderedDict([('condition', 'condition 3')]),
      OrderedDict([('condition', 'condition 4')])]
    Routine RMshow_noise
    LoopInitiator _loop_lists loopType="TrialHandler"
      loopType = random
      nReps = 5
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      LoopInitiator _loop_words loopType="TrialHandler"
        loopType = random
        nReps = 5
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        Routine _see_word
      LoopTerminator _loop_words
    LoopTerminator _loop_lists
  LoopTerminator _loop_noises
  Routine _bye
